#----------------------------
# Visualisation
#----------------------------
/control/execute ./macro/Visualisation.mac
/vis/disable

#----------------------------
# Verbosity 
#----------------------------
/control/execute ./macro/Verbosity.mac

#----------------------------
# Material
#----------------------------
/gate/geometry/setMaterialDatabase ./GateMaterials.db

#----------------------------
# World
#----------------------------
/gate/world/geometry/setXLength     1000. mm
/gate/world/geometry/setYLength     1000. mm
/gate/world/geometry/setZLength     1000. mm
/gate/world/setMaterial             Air
/gate/world/vis/setVisible          true
/gate/world/vis/setColor            white
/gate/world/vis/forceWireframe

#----------------------------
# Scanner Geometry
#----------------------------
/control/execute ./macro/Geometry.mac

#----------------------------
# Phantom Geometry
#----------------------------
/control/execute ./macro/Phantom.mac

#----------------------------
# Physics
#----------------------------
/control/execute ./macro/Physics.mac

#----------------------------
# Actors
#----------------------------
/gate/actor/addActor               SimulationStatisticActor stat
/gate/actor/stat/save              ./{outputfolder}/stat.txt
/gate/actor/stat/saveEveryNSeconds 60

#----------------------------
# Inilization
#----------------------------
/gate/run/initialize

#----------------------------
# Digitizer
#----------------------------
/control/execute ./macro/Digitizer.mac

#----------------------------
# Source
#----------------------------
/control/execute ./macro/Source.mac

#----------------------------
# Data output
#----------------------------

# ASCII output
/gate/output/ascii/enable
/gate/output/ascii/setFileName                ./{outputfolder}/partial_
/gate/output/ascii/setOutFileHitsFlag         0
/gate/output/ascii/setOutFileSinglesFlag      0
/gate/output/ascii/setOutFileCoincidencesFlag 1
# Mask Columns                                          1                   2                   3                   4
# Mask Columns                        1 2 3 4 5 6 7 8 9 0 1 2 3 4 5 6 7 8 9 0 1 2 3 4 5 6 7 8 9 0 1 2 3 4 5 6 7 8 9 0 1 2 3 4 5 6
/gate/output/ascii/setCoincidenceMask 0 0 0 0 0 0 0 0 1 1 1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1 1 1 0 0 0 0 0 0 0 0 0 0 0 0

# ROOT Output format
/gate/output/root/enable
/gate/output/root/setFileName             ./{outputfolder}/partial_
/gate/output/root/setRootHitFlag          0
/gate/output/root/setRootSinglesFlag      0
/gate/output/root/setRootCoincidencesFlag 1

#----------------------------
# Randomize 
#----------------------------
# MersenneTwister
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto

#----------------------------
# Acquisition
#----------------------------
/gate/application/setTimeSlice {timeslice} s
/gate/application/setTimeStart {timestart} s
/gate/application/setTimeStop  {timestop} s
/gate/application/startDAQ
