/gate/physics/addPhysicsList emstandard_opt3

#/gate/physics/removeProcess Bremsstrahlung
#/gate/physics/removeProcess RayleighScattering
#/gate/physics/removeProcess ElectronIonization e-
#/gate/physics/removeProcess ElectronIonisation

/gate/physics/addProcess RadioactiveDecay
#/gate/physics/addProcess PhotoElectric gamma
#/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/Gamma/SetCutInRegion	    world	1 mm
/gate/physics/Electron/SetCutInRegion	world	1000 km
/gate/physics/Positron/SetCutInRegion	world	1 mm

#/gate/physics/processList Enabled
#/gate/physics/processList Initialized
/process/em/verbose	0
