#----------------------------
# Visualisation
#----------------------------
#/vis/disable

#----------------------------
# Verbosity 
#----------------------------
#/control/execute ./macro/Verbose.mac

#----------------------------
# Material
#----------------------------
/gate/geometry/setMaterialDatabase ./GateMaterials.db

#----------------------------
# World
#----------------------------
/gate/world/geometry/setXLength     1000. mm
/gate/world/geometry/setYLength     1000. mm
/gate/world/geometry/setZLength     1000. mm
/gate/world/setMaterial             Air
/gate/world/vis/setVisible          true
/gate/world/vis/setColor            white
/gate/world/vis/forceWireframe

#----------------------------
# Scanner Geometry
#----------------------------
/control/execute ./macro/Geometry.mac
#/control/execute ./macro/Visualisation.mac


#----------------------------
# Phantom Geometry
#----------------------------
#no phantom
#/control/execute ./macro/Phantom.mac

#----------------------------
# Physics
#----------------------------
/control/execute ./macro/Physics.mac
#/control/execute ./macro/egammaStandardPhys.mac

#----------------------------
# Actors
#----------------------------
/gate/actor/addActor               SimulationStatisticActor stat
/gate/actor/stat/save              ./output/stat.txt
/gate/actor/stat/saveEveryNSeconds 60

#/gate/actor/addActor                                EnergySpectrumActor energyActor
#/gate/actor/energyActor/save                        ./output/energy.root
#/gate/actor/energyActor/energySpectrum/setEmin      0. eV
#/gate/actor/energyActor/energySpectrum/setEmax      1. MeV
#/gate/actor/energyActor/energySpectrum/setNumberOfBins  1000
#/gate/actor/energyActor/enableEdepHisto                 true
#/gate/actor/energyActor/enableEdepTimeHisto             true
#/gate/actor/energyActor/enableEdepTrackHisto            true
#/gate/actor/energyActor/enableEdepStepHisto             true

#----------------------------
# Inilization
#----------------------------
/gate/run/initialize
#/geometry/test/run
/gate/physics/Gamma/SetCutInRegion	    cylindricalPET	0.1 mm
/gate/physics/Electron/SetCutInRegion	cylindricalPET	0.1 mm
/gate/physics/SetMinKineticEnergyInRegion	cylindricalPET	0.02 keV
/process/em/applyCuts true
#/process/em/fluo	false
/gate/physics/print ./output/physics.txt
#----------------------------
# Digitizer
#----------------------------
/control/execute ./macro/Digitizer.mac

#----------------------------
# Source
#----------------------------
/control/execute ./macro/Source_HN.mac
#/control/execute ./macro/Source.mac

#----------------------------
# Data output
#----------------------------

# ASCII output
/gate/output/ascii/enable
/gate/output/ascii/setFileName                  ./output/pet
/gate/output/ascii/setOutFileHitsFlag           1
/gate/output/ascii/setOutFileSinglesFlag        1
/gate/output/ascii/setOutFileCoincidencesFlag   0
#                                               0                 1                   2
# Columns                                       1 2 3 4 5 6 7 8 9 0 1 2 3 4 5 6 7 8 9 0 1 2 3 4 5
#/gate/output/ascii/setHitMask                   0 1 1 1 0 1 1 0 0 0 1 1 0 1 1 1 1 1 1 1 0 0 1 0 0

# ROOT Output format
/gate/output/root/enable
/gate/output/root/setFileName             ./output/pet
/gate/output/root/setRootHitFlag          1
/gate/output/root/setRootSinglesFlag      1
/gate/output/root/setRootCoincidencesFlag 0

#/gate/output/tree/enable
#/gate/output/tree/addFileName             ./output/pet.root
/gate/output/tree/hits/enable
/gate/output/tree/addFileName               ./output/p.npy

#----------------------------
# Randomize 
#----------------------------
# MersenneTwister
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto

#----------------------------
# Acquisition
#----------------------------
/gate/application/setTimeSlice 1 s
/gate/application/setTimeStart 0 s
/gate/application/setTimeStop  1 s
/gate/application/startDAQ






